PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1512, 982]
  color = white
  expName = Stroop_Experiment
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Routines
  Routine trial
    TextComponent Stim
      color [set every repeat] = $lettercolor
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      text [set every repeat] = $text
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    KeyboardComponent key_resp
      allowedKeys = 'down','left','right','space'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    TextComponent Fixation_Cross
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent Colours_Of_Letters
      color = black
      letterHeight = 0.05
      pos = (0, -0.37)
      startVal [time (s)] = 0
      text = red      green     blue
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    ImageComponent Left_arrow
      image = Arrow.png
      ori = 270
      pos = (-0.3, -0.37)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
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    ImageComponent Down_arrow
      image = Arrow.png
      pos = (0, -0.45)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
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    ImageComponent Right_Arrow
      image = Arrow.png
      ori = 90
      pos = (0.3, -0.37)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
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    TextComponent Task_Title
      color = black
      letterHeight = 0.04
      pos = (0, 0.40)
      startVal [time (s)] = 0.0
      text = Identify the colour of the word.
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  Routine Instructions
    TextComponent Introductionary_Instructions
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Stroop experiment.

        Your task will be to correctly identify the colour of the word while ignoring what the word says.

        Press 'left' if the colour is red
        Press 'down' if the colour is green
        Press 'right' if the colour is blue

        Press 'space' to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thanks
    TextComponent text_2
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Thank you for taking part in this experiment.

        The stroop effect was developed by John Riddley Stroop in 1935 to measure the discrepancy in reaction times between congruent and incongruent information. It has often been found that more errors are made when stimuli are incongruent.

        MRI, fMRI, and PET studies have found the posterior dorsolateral prefrontal cortex and the anterior cingulate gyrus are mainly involved in the task.

        Press ‘space’ to close the experiment.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Stroop_Excel.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'mandem': 'red', 'lettercolour': 'red', 'corrAns': 'left', 'congruent': 1},
      {'mandem': 'red', 'lettercolour': 'green', 'corrAns': 'down', 'congruent': 0},
      {'mandem': 'green', 'lettercolour': 'green', 'corrAns': 'down', 'congruent': 1},
      {'mandem': 'green', 'lettercolour': 'blue', 'corrAns': 'right', 'congruent': 0},
      {'mandem': 'blue', 'lettercolour': 'blue', 'corrAns': 'right', 'congruent': 1},
      {'mandem': 'blue', 'lettercolour': 'red', 'corrAns': 'left', 'congruent': 0}]
    Routine trial
  LoopTerminator trials
  Routine Thanks
